PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = stimulus_presentation
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent Welcome_Message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to bot or not!
        Click to start.
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine faces
    ImageComponent face
      image [set every repeat] = $images
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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Flow
  Routine trial
  LoopInitiator presentation loopType="TrialHandler"
    conditionsFile = face_images.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'images': 'ai_images/p1.png'},
      {'images': 'ai_images/p2.png'},
      {'images': 'ai_images/p3.png'},
      {'images': 'ai_images/p4.png'},
      {'images': 'ai_images/p5.png'},
      {'images': 'ai_images/p6.png'},
      {'images': 'real_images/p1.png'},
      {'images': 'real_images/p2.png'},
      {'images': 'real_images/p3.png'},
      {'images': 'real_images/p4.png'},
      {'images': 'real_images/p5.png'},
      {'images': 'real_images/p6.png'}]
    Routine faces
  LoopTerminator presentation
