PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent Welcome_Message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to bot or not!
        Click to start.
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine faces
Flow
  Routine trial
  LoopInitiator presentation loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine faces
  LoopTerminator presentation
